PsychoPy2experiment version="1.82.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = RiskAmbiguity_V2
  Units = height
  Screen = 1
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Routines
  Routine EndScreen
    TextComponent endscreentext
      text = End of experiment.
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Presentation_Trial
    ImageComponent trialimage
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $ImageFile
      size = (1.6,0.9)
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    KeyboardComponent right_or_left
      stopVal [duration (s)] = 6.0
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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    CodeComponent save_onsets
      End Routine:
        trialendtime = t
        thisExp.addData('TrialStartTime',trialimage.tStart)
        thisExp.addData('TrialEndTime',trialendtime)
  Routine ChipsWelcomeScreen
    TextComponent textwelcome_chips
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Welcome to the Chips Game.

        Remember to press '1' to choose the left option and '0' to choose the right option.

        When you are ready, press the spacebar to continue.
    KeyboardComponent wait_for_spacebar_chips
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine ISI_NoResponse
    TextComponent ISI_NoResponse_Fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ISI
    TextComponent ISI_fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine ChipsWelcomeScreen
  Routine ISI_NoResponse
  LoopInitiator choicetrials loopType="TrialHandler"
    conditionsFile = RiskAmbiguity_ConditionFile_V2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'riskprob': 0.5, u'winval': 4, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide001.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.5, u'winval': 4, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide002.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.5, u'winval': 4, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide003.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.5, u'winval': 4, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide004.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.75, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide005.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.5, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide006.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.25, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide007.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0},
      {u'riskprob': 0.5, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide008.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0.24},
      {u'riskprob': 0.5, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide009.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0.5},
      {u'riskprob': 0.5, u'winval': 5, u'riskOp': 1, u'ImageFile': u'V2_TrialImages/Slide010.jpg', u'nowinval': 0, u'certainval': 5, u'ambiglevel': 0.74}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
    Routine Presentation_Trial
    Routine ISI
  LoopTerminator choicetrials
  Routine ISI_NoResponse
  Routine EndScreen
